' Detect spikes using the threshold suggested in unsupervised spike detection and sorting with wavelets and superparamagnetic clustering
' Change NumSTD to desired value

' !!!!!!!!!!!!!!!!!!!global variables!!!!!!!!!!!!!!!!!!!
' !!!!!!!!!!!!!!!!!!!global variables!!!!!!!!!!!!!!!!!!!
var ChanString$, nC2threshold%:=15;  ' number of channels to perform thresholding
ChanString$ := "2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16";; 'channels to perform thresholding

' actuall threshold used for spike detection
var NumStd := 2.0;  ' Threshold = SD * NumStd

' channels to export
var exportflag% := 0; ' if 1, export channels to .mat; if 0, do not do that.
var channellist$; ' channels to export
channellist$ := "1,17..299";  ' 17 to 299: all wavemark channels and event channels


' maximum files processed by the script
var maxdata%; 
maxdata% := 10000; ' The maximum number of data files that the algorithm could process

' !!!!!!!!!!!!!!!!!!!global variables!!!!!!!!!!!!!!!!!!!
' !!!!!!!!!!!!!!!!!!!global variables!!!!!!!!!!!!!!!!!!!


var ok%, nfiles%, datapath$; 
var datanamelist$[maxdata%];
FileList(datanamelist$[], 0);
ok%:=FilePathSet("",0,"Select folder to process");	'select folder for FileList
if ok%<0 then	
	Message("Cannot set new directory");	 'cancelled
    halt; 
endif;
datapath$ := FilePath$(0);
nfiles%:=FileList(datanamelist$[],0);	                         'count .smr files
if nfiles%=0 then
	Message("No .smr files found in this folder");
    halt;
endif;

var idx%, temppath$;
for idx% := 0 to nfiles% - 1 do 
    temppath$ := datapath$ + datanamelist$[idx%];
    threshold(temppath$);
next;

'---------------------------------------------------------------------
'---------------------------------------------------------------------
func threshold(temppath$)
var FVH%, birdID$, birdextra$, FullName$, LengthOfName%; 
' Front View Hanlde, BirdID$, birdextra$, the Full Directory of the file, the length of the Full Directory
FVH% := FileOpen(temppath$,0,3,"Select data file you want to Threshold: ");; 
View(FVH%);
birdID$ :=FileName$(3);  ' This takes the filename of the current view and use it to name the extracted matlab files
birdextra$ := FileName$(4); ' Obtain the possible trialing number of the file name
FullName$ := FileName$(); ' Obtain the full directory of the file
DelStr$(FullName$, LengthOfName% - 3, 4); ' Delete the ".smr" extension
birdID$ := birdID$ + birdextra$; ' Obtain the whole name of the data file 


' Loop Through all the channels that one wants to threshold
var ChanVec%[nC2threshold%];
' ChanString$: store the channels that the algorithm needs to process
' ChanVec[]: vectorized channel array
ReadSetup(","); ' Deliminator used to Parse ChanString$
ReadStr(ChanString$, ChanVec%[]); 
var NumChannel%; ' # of channels needs to be processed
NumChannel% := Len(ChanVec%[]); 

' ------------------ Main Loop for Creating New WaveMark Channels --------------------
var ChanStd[NumChannel%], ChanThreshold[NumChannel%], ChanNum%, RecordDuration, HCPosition; 
' ChanStd[]: standard deviation for each channels
RecordDuration := MaxTime(1); ' Obtain the recording duration from the 1st Channel
var LoopIdx%; 
for LoopIdx% := 0 to NumChannel% - 1 do
    ChanNum% := ChanVec%[LoopIdx%]; 
    if ChanNum% = 0 then
        Continue;
    endif;
    NewWaveMark(ChanNum%, ChanStd[], ChanThreshold[], NumStd, RecordDuration, FVH%);
    Yield(0.1);
next

' For Debugging
var TextVH%, LogFile[3][NumChannel%]; ' LogFile%: values printed in the Log
ArrConst(LogFile[][], 0);
TextVH% := FileNew(1, 1);
ArrAdd(LogFile[0][:], ChanVec%[]);
ArrAdd(LogFile[1][:], ChanStd[]);
ArrAdd(LogFile[2][:], ChanThreshold[]);
print("Channel Number, Standard Deviation, Threshold \n");
print(LogFile[][]`);
View(TextVH%);
FileSaveAs(FullName$ + "_ThresholdLog.txt");

FileClose(-1);
end
' ------------------ Main Loop for Creating New WaveMark Channels --------------------


' ------------------ Export to .mat files ---------------------
' note: if the file name contains more than 1 dot ".", the channel name would only contain the strings before the first dot. 
'       this is limitation of export function 
' to keep consistence between the name of .mat file and the variables it contained, the .mat file also only include the strings
'       before the 1st dot "."; 

var instruction$, storepath$; 
storepath$ := FilePath$(0);

var iidx%;
if exportflag% = 1 then' only export if flag is 1
    for iidx% := 0 to nfiles% - 1 do 
        temppath$ := datapath$ + datanamelist$[iidx%];
        spike2matlab(temppath$, storepath$);
    next;
endif;


'---------------------------------------------------------------------
'-------------------spike2matlab-------------------------------------
func spike2matlab(temppath$, storepath$)
var vh%, stt, ent, chan%,neuo%,bird%, savchan%,title$;
var name$;
var birdID$; 
var birdextra$, residual$; 
var v711%; 'View created by FileOpen()
' Open the data file that you want to extract 
v711%:=FileOpen(temppath$, 0, 3, "Select data file you want to export: ");  
View(v711%); ' Set the opened data file to "Current View"

FilePathSet(storepath$); ' Set the folder to store the waveforms

birdID$ :=FileName$(3);  ' This takes the filename of the current view and use it to name the extracted matlab files
birdextra$ := FileName$(4); ' Obtain the possible trialing number of the file name
birdID$ := birdID$ + birdextra$; ' Obtain the whole name of the data file
if Right$(birdID$, 1) = "." then  ' if the original file name contains more than one dot "."
    TrimRight(birdID$, ".");  ' then remove the dot
endif
'. Main function
vh% :=View();
CursorSet(0);

ExportChanList(1); 'Initialise the channel list
name$ := storepath$ + birdID$ + "_" + ".mat";

ExportChanList(0, MaxTime(1), channellist$); 
FileSaveAs(name$,100,0,"",0,
    "UseSName=1|UseCName=1|WaveTimes=0|BinFreq=0|BinTimes=0|WaveData=2|MarkAs=1|TMarkAs=2|RMarkAs=2|RMarkData=2|WaveMarkAs=2|WaveMarkData=2|Compat=0"); 'Export (string args)


FileClose(-1);
FileClose(0,0);  ' if you want to close the data file after opening it, uncomment this line
end
' -------------------------------- export to .mat files --------------------------------------------------------




' ------------------ Procedure of Thresholding -----------------------
proc NewWaveMark(ChanNum%, ChanStd[], ChanThreshold[], NumStd, RecordDuration, FVH%) 
' Open the wavemark view
var HCPosition;

' copy data from channel to array
'var size% := Ceil(RecordDuration * 25000 + 10);
'var myarray[size%]; ' upper limit: 1 hours of recording
'var ndts%, normfactor := 0.6745;
'var num_median := 4.0;
'ndts% := ChanData(ChanNum%, myarray, 0, RecordDuration);
'Abs(myarray[:ndts%]);
'ArrDiv(myarray[:ndts%], normfactor);

' calculate the threshold according to "unsupervised spike detection and sorting with wavelets and superparamagnetic clustering"
'var med, medthres;
'med := RMedian(myarray[:ndts%]);
'medthres := med * NumStd;
'resize myarray[1];

'ChanStd[ChanNum% - 2] := med;
'ChanThreshold[ChanNum% - 2] := num_median * ChanStd[ChanNum% - 2]; ' Index starts from 0
ChanStd[ChanNum% - 2] := ChanMeasure(ChanNum%, 12, 0, RecordDuration);
ChanThreshold[ChanNum% - 2] := NumStd * ChanStd[ChanNum% - 2]; ' Index starts from 0
HCPosition := HCursor(1, ChanThreshold[ChanNum% - 2], ChanNum%); 
View(FVH%);
var WMH%; ' WaveMark View Handle
WMH% := SSOpen(2, 0); 'Open New Wavemark spike shape dialog
SSChan(ChanNum%);
HCursor(1, -5); 'Set Wavemark trigger level
HCursor(2, ChanThreshold[ChanNum% - 2]); 'Set Wavemark trigger level
SSParam(20, 32.00, 50, 20.00, 80.00, 3, 0, 64, 0, 9); 'Set all parameters
SSButton(7, 1); 'Make templates: 1=yes, 0=no
var ChanNewWaveMark%; 
var ch%[2];   ' for channel specifications
ChanNewWaveMark% :=1; 
if View(ViewLink()).ChanList(ch%, 128) > 0 then 'If unused channels
    ChanNewWaveMark% := ch%[1];                 'use first
    SSClassify(1, ChanNewWaveMark%, 6);         'Create new WaveMark channel
endif;
FileClose(); 
return;
end;


func Chan2Array(ChanNum%, RecordDuration)
var arraysize%;
arraysize% := 25000 * 3600 * 2;
var myarray[arraysize%]; ' upper limit: 2 hours of recording
var ndts%;
ndts% := ChanData(ChanNum%, myarray, 0, RecordDuration);
return myarray[:ndts%]
end

func RMedian(RArray[])
' calculate the median of an array
var l% := Len(RArray[]);
var TArray[l%];
var m;

ArrConst(TArray[], RArray[]);
ArrSort(TArray[]);


if l% band 1 then
    m := TArray[l%/2];
else    
    ArrSum(TArray[l%/2 -1 : 2], m);
endif;
return m;

end